'CR1000 Series
'Created by Short Cut (4.6)

Const FRAME = 37 '% in ASCII
Const TABLE_METADATA = "TM"
Const TABLE_ENTRY = "TE"

'Declare Variables and Units
Public BattV
Public PTemp_C
Public Temp_C
Public tempASCII
Public arrOut(5)

Public TblFldNames(3) As String = {"BattV", "PTemp_C", "Temp_C"}
Public TblFldUnits(3) As String = {"Volts", "Deg C", "Temp C"}
Public TblName As String = "Table1"
Public TblNumCols As Long

Public NBytesRet

'Serial communication variables
Public SerialInDest As String * 128
Public SerialInHead As String * 2
Public timeSec As Long
Public SS1990 As Long
Public StopRec As Long
Public StartRec As Long

Units BattV=Volts
Units PTemp_C=Deg C
Units Temp_C=Deg C

'Define Data Tables
DataTable(Table1,True,-1)
	DataInterval(0,10,Sec,10)
	Sample(1,BattV,FP2)
	Average(1,PTemp_C,FP2,False)
	Average(1,Temp_C,FP2,False)
EndTable

'Main Program
BeginProg
  ' Table Metadata Information
  TblNumCols = 5  

  'InString = "abcdefghijklmnopqrstuvwxyz"
  'open serial line here
  SerialOpen(Com1,9600,16,0,10000)
	'Main Scan
	Scan(10,Sec,1,0)
		'Default CR6 Datalogger Battery Voltage measurement 'BattV'
		Battery(BattV)
		'Default CR6 Datalogger Wiring Panel Temperature measurement 'PTemp_C'
		PanelTemp(PTemp_C,60)
		'Type T Thermocouple measurements 'Temp_C'
		TCDiff(Temp_C,1,mv250,1,TypeT,PTemp_C,True,0,60,1,0)
		
    'read serial in from MCU
    SerialInRecord(Com1, SerialInDest, FRAME, 0, FRAME, NBytesRet, 00)
    SerialInHead = Mid(SerialInDest, 1, 2)
    
    'debugging output
    'SerialOut(Com1, SerialInHead, 0, 1, 0)
    Dim SerialOutString As String * 128
    'SerialOut(Com1, "dogs", 0, 1, 0)  
    If StrComp(SerialInHead, TABLE_ENTRY) = 0 Then
      'construct a string containing the data at the table entry requested, unless the table entry
      'requested is greater than the number of total entries... just return %TE% if that's the case
      Dim ReqRecNum As Long
      ReqRecNum = Mid(SerialInDest, 3, 1)
      If ReqRecNum > Table1.TableSize(1, 1)
        Sprintf(SerialOutString, "%c%s%c", FRAME, TABLE_ENTRY, FRAME)
      Else
        Dim TempS As String * 128
        GetRecord(TempS, Table1, Table1.Record(1,1)-ReqRecNum)
        Sprintf(SerialOutString, "%c%s%d,%s%c", FRAME, TABLE_ENTRY, ReqRecNum, TempS, FRAME)
      EndIf
      SerialOut(Com1, SerialOutString, 0, 1, 0)
    ElseIf StrComp(SerialInHead, TABLE_METADATA) = 0 Then
      'construct a string with the table name, num cols, and field names
      Sprintf(SerialOutString, "%c%s%s;%d;%s", FRAME, TABLE_METADATA, TblName, TblNumCols, TblFldNames(1))
      Dim I
      For I = 2 To ArrayLength(TblFldNames)
        SerialOutString = SerialOutString + "," + TblFldNames(I)
      Next I
      SerialOutString = SerialOutString + ";" + TblFldUnits(1)
      For I = 2 To ArrayLength(TblFldUnits)
        SerialOutString = SerialOutString + "," + TblFldUnits(I)
      Next I
      SerialOutString = SerialOutString + "%"
      'send it over the line
      SerialOut(Com1, SerialOutString, 0, 1, 0)
    EndIf
    'ElseIf StrComp(SerialInHead, "TS") = 0 Then
      'debugging output
      'SerialOut(Com1, SS1990, 0, 1, 0)
    'EndIf
    
		'Call Data Tables and Store Data
		CallTable Table1
		
    'read table data here
    
	NextScan
EndProg
